CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "Pixel Classification")
    Name to assign these images:pixel_classification
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "RFP")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "YFP")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "color image")
    Name to assign these images:color-image
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:pixel_classification
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:bacteriaSegmented
    Convert green to gray?:No
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    Convert blue to gray?:No
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:bacteriaSegmented
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:40
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):9,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:40
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
TrackObjects:[module_num:8|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
    Choose a tracking method:Overlap
    Select the objects to track:IdentifyPrimaryObjects
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:2
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:IdentifyPrimaryObjects
    Select neighboring objects to measure:IdentifyPrimaryObjects
    Method to determine neighbors:Within a specified distance
    Neighbor distance:3
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity:[module_num:11|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
    Select images to measure:RFP, YFP
    Select objects to measure:IdentifyPrimaryObjects

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

Tile:[module_num:13|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
    Select an input image:color-image
    Name the output image:Detected_objects
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:CellImage
    Select an additional image to tile:TrackedCells

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Detected_objects
    Select method for constructing file names:From image filename
    Select image name for file prefix:pixel_classification
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Documents/GitHub/Image-processing-pipelines/CellProfiler Pipelines/Fluorescent_images/CP output/tracked cells
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/GitHub/Image-processing-pipelines/CellProfiler Pipelines/Fluorescent_images/CP output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:IdentifyPrimaryObjects
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
