CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "color image")
    Name to assign these images:bac_color_img
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "YFP")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "RFP")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:bac_color_img
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
RunOmnipose:[module_num:6|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
    Select the input image:OrigGray
    Expected object diameter:30
    Model:bact_phase_omni
    Name the output object:RunOmnipose
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:Yes
    Name the probability image:Probabilities
    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.0
    Distance field threshold:1.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:40
    Use Omnipose for mask reconstruction:Yes
    ncolor:Yes
    DBSCAN clustering:Yes
    Invert images:No
    verbose:Yes
    tile:Yes

FilterObjects:[module_num:7|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
    Select the objects to filter:RunOmnipose
    Name the output objects:FilterObjects
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
TrackObjects:[module_num:8|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
    Choose a tracking method:Overlap
    Select the objects to track:FilterObjects
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:1
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:FilterObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:FilterObjects
    Select neighboring objects to measure:FilterObjects
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity:[module_num:11|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
    Select images to measure:RFP, YFP
    Select objects to measure:FilterObjects

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:FilterObjects
    Name the output image:CellImage_rgb
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:13|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
    Select the input objects:FilterObjects
    Name the output image:CellImage_bw
    Select the color format:Binary (black & white)
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
MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:FilterObjects
    Select neighboring objects to measure:FilterObjects
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
Tile:[module_num:15|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
    Select an input image:bac_color_img
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:CellImage_rgb
    Select an additional image to tile:TrackedCells

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:bac_color_img
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Documents/test/tracked_cells
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:CellImage_bw
    Select method for constructing file names:From image filename
    Select image name for file prefix:bac_color_img
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents/test/objects
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:CellImage_rgb
    Select method for constructing file names:From image filename
    Select image name for file prefix:bac_color_img
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    Append a suffix to the image file name?:No
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    Saved file format:npy
    Output file location:Default Input Folder sub-folder|Documents/test/objects
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:Probabilities
    Select method for constructing file names:From image filename
    Select image name for file prefix:bac_color_img
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents/test/probabilities
    Image bit depth:No conversion
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/test
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:FilterObjects
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
