CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "Object Classification")
    Name to assign these images:img
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "RFP")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "YFP")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:img
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:img
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Watershed:[module_num:7|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
    Select the input image:CorrBlue
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:4
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Watershed
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrBlue
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
TrackObjects:[module_num:9|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
    Choose a tracking method:Distance
    Select the objects to track:IdentifySecondaryObjects
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:2
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:RFP, YFP
    Select objects to measure:IdentifySecondaryObjects

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:IdentifySecondaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:12|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
    Select objects to measure:IdentifySecondaryObjects
    Select neighboring objects to measure:IdentifySecondaryObjects
    Method to determine neighbors:Within a specified distance
    Neighbor distance:6
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:tracking
    Number of digits:4
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Downloads\\50_50_forphdproposaleach3minutesflouresenct_01_3_AcquisitionBlock1\\CP Outputs\\tracking
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads\\50_50_forphdproposaleach3minutesflouresenct_01_3_AcquisitionBlock1\\CP Outputs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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